<MorpheusModel version="4">
    <Description>
        <Title>Rac-Rho-T_Collision_TrackB</Title>
        <Details>Chemotaxis of polarized cell
----------------------------
Show feedback between cell motility, cell polarization and external gradient.
 
Two cell polarization models are taken from the original publication:
Y. Mori, A. Jilkine and L. Edelstein-Keshet (2008). Wave-Pinning and Cell Polarity from a Bistable Reaction-Diffusion System. Biophysical Journal 94(9), 3684-3697. DOI:10.1529/biophysj.107.120824

Using WP model of Rac activity in Morpheus by Jupiter Algorta (2025) and adding Rho influence.
</Details>
    </Description>
    <Global>
        <Constant symbol="lengthscale" value="(1.5)*2*pi/132"/>
        <Variable symbol="R" name="Active Rac" value="0.0"/>
        <Variable symbol="R_i" name="Inactive Rac" value="0.0"/>
        <Variable symbol="Rho" name="Active Rho" value="0.0"/>
        <Variable symbol="Rho_i" name="Inactive Rho" value="0.0"/>
        <Field symbol="U" value="0.0">
            <TIFFReader filename="TrackBMed_300x450_grayscale_16bit.tiff" scaling="1.0"/>
        </Field>
        <Constant symbol="DH" value="0.04"/>
        <Constant symbol="DP" value="0.62"/>
        <Field symbol="prot" value="0.0"/>
    </Global>
    <Space>
        <SpaceSymbol symbol="l"/>
        <MembraneLattice>
            <Resolution symbol="memsize" value="500"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
        <Lattice class="square" name="TrackB">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <!--    <Disabled>
        <Circle diameter="0"/>
    </Disabled>
-->
                <Image path="TrackB_300x450.tiff"/>
            </Domain>
        </Lattice>
        <!--    <Disabled>
        <Lattice class="square" name="TrackA">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle internal:disabled="true" diameter="0"/>
                <Image path="TrackA_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="4000"/>
        <SaveInterval value="0"/>
        <!--    <Disabled>
        <RandomSeed value="600"/>
    </Disabled>
-->
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="cells">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="1.2" strength="0.8" mode="aspherity"/>
            <MembraneProperty symbol="R" name="Active form of protein" value="0.5+rand_uni(-0.1,0.1)">
                <Diffusion rate="0.12/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="R_i" name="Inactive form of protein" value="7.31-rand_uni(-0.1,0.1)-0.5">
                <Diffusion rate="1*1/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="Rho" name="Active form of protein" value="0.5+rand_uni(-0.1,0.1)">
                <Diffusion rate="0.12/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="Rho_i" name="Inactive form of protein" value="7.31-rand_uni(-0.1,0.1)-0.5">
                <Diffusion rate="1*1/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="2">
                <Diffusion rate="0.09/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="3.08-0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <System time-step="0.05" name="WavePinning Rac" time-scaling="5" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="rand_norm(0.028, 0.000765)"/>
                <Constant symbol="k_1" value="rand_norm(0.372, 0.006632)"/>
                <Constant symbol="s_1" value="rand_norm(0.059, 0.001530)"/>
                <Constant symbol="gamma" value="rand_norm(1.38, 0.0214)"/>
                <Constant symbol="delta" value="rand_norm(0.721, 0.006887)"/>
                <Constant symbol="K" value="rand_norm(2.93, 0.0408)"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="F" value="1*(R_i*(k_0+ s_1*(0.93+0.5*s) + (gamma) / (1 + Rho^n) ) - (delta+k_1*H)*R)"/>
                <DiffEqn symbol-ref="R">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="R_i">
                    <Expression>-F</Expression>
                </DiffEqn>
            </System>
            <System time-step="0.05" name="WavePinning Rho" time-scaling="5" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0_rho" value="rand_norm(0.028, 0.000765)"/>
                <Constant symbol="k_1_rho" value="rand_norm(0.372, 0.006632)"/>
                <Constant symbol="s_1_rho" value="rand_norm(0.059, 0.001530)"/>
                <Constant symbol="gamma_rho" value="rand_norm(1.38, 0.0214)"/>
                <Constant symbol="delta_rho" value="rand_norm(0.721, 0.006887)"/>
                <Constant symbol="K_rho" value="rand_norm(2.93, 0.0408)"/>
                <Constant symbol="K_T" name="Tension Hill function parameter" value="5.0"/>
                <Constant symbol="n_T" name="Tension Hill coefficient" value="4"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="G" value="1*(Rho_i*(k_0_rho+ s_1_rho*(0.93) + (gamma_rho) / (1 + R^n) + T_0 * Tension^n_T / ( K_T ^ n_T + Tension ^ n_T ) ) - (delta_rho+k_1_rho*H)*Rho)"/>
                <DiffEqn symbol-ref="Rho">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="Rho_i">
                    <Expression>-G</Expression>
                </DiffEqn>
            </System>
            <!--    <Disabled>
        <System time-step="0.05" name="Inhibitor" time-scaling="5" solver="Euler [fixed, O(1)]">
            <Constant symbol="alpha" value="rand_norm(0.0068, 0.000102040)"/>
            <Constant symbol="deltah" value="rand_norm(0.004, 0.00015306)"/>
            <DiffEqn symbol-ref="H">
                <Expression>1*(alpha*A-deltah*H)</Expression>
            </DiffEqn>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <System time-step="0.05" name="PIP3" time-scaling="0.040" solver="Euler [fixed, O(1)]">
            <Intermediate symbol="G" value="((P2) * (0.41 + 0.26 * 3.7*s+0.26) - (1.59) * P3)"/>
            <DiffEqn symbol-ref="P3">
                <Expression>G</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="P2">
                <Expression>-G</Expression>
            </DiffEqn>
        </System>
    </Disabled>
-->
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="R"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="R - Rho" strength="10"/>
            <Protrusion maximum="500" strength="10" field="prot"/>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <Constant symbol="targ_Perimeter" value="174.0"/>
            <Property symbol="Area" value="0.0"/>
            <Property symbol="Perimeter" value="0.0"/>
            <Property symbol="perimeter_diff" value="0.0"/>
            <Constant symbol="T_0" value="3.0"/>
            <Property symbol="Tension" value="0.0"/>
            <System time-step="0.05" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="Area">
                    <Expression>cell.volume</Expression>
                </Rule>
                <Rule symbol-ref="Perimeter">
                    <Expression>cell.surface</Expression>
                </Rule>
                <Rule symbol-ref="Tension">
                    <Expression>if(Perimeter - targ_Perimeter > 0, Perimeter - targ_Perimeter, 0)</Expression>
                </Rule>
                <!--    <Disabled>
        <Rule symbol-ref="Tension">
            <Expression>perimeter_diff^n_T / ( K_T ^ n_T +  perimeter_diff ^ n_T )</Expression>
        </Rule>
    </Disabled>
-->
            </System>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0.0"/>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.3"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics yield="0.05" temperature="1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population type="cells" size="0" name="TrackB">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.25, 0.05*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
        <!--    <Disabled>
        <Population type="cells" size="0" name="TrackA">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.05, 0.05*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
    </CellPopulations>
    <Analysis>
        <!--    <Disabled>
        <Gnuplotter time-step="5" decorate="false">
            <Terminal name="png"/>
            <Plot title="Protrusion Field">
                <Cells value="cell.type"/>
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color value="0" color="yellow"/>
                        <Color value="1" color="orange"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <CellTracker format="ISBI 2012 (XML)" time-step="1"/>
        <!--    <Disabled>
        <Gnuplotter time-step="10" decorate="false">
            <Terminal name="png"/>
            <Plot title="Active Protein &amp; Light Stimulus">
                <Cells value="R"/>
                <CellArrows orientation="p*200"/>
                <Field symbol-ref="U" max="1" min="0">
                    <ColorMap>
                        <Color value="0.01" color="yellow"/>
                        <Color value="1" color="orange"/>
                        <Color value="0" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Logger time-step="5">
            <Input>
                <Symbol symbol-ref="m.phi"/>
                <Symbol symbol-ref="R"/>
                <Symbol symbol-ref="R_i"/>
                <Symbol symbol-ref="s"/>
                <Symbol symbol-ref="Rho"/>
                <Symbol symbol-ref="Rho_i"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots internal:disabled="true">
                <Plot time-step="1">
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis maximum="6.283">
                        <Symbol symbol-ref="m.phi"/>
                    </X-axis>
                    <Y-axis minimum="0.0">
                        <Symbol symbol-ref="R"/>
                        <Symbol symbol-ref="R_i"/>
                        <Symbol symbol-ref="s"/>
                        <Symbol symbol-ref="Rho"/>
                        <Symbol symbol-ref="Rho_i"/>
                    </Y-axis>
                    <Range>
                        <Time mode="current"/>
                    </Range>
                </Plot>
            </Plots>
        </Logger>
    </Disabled>
-->
        <ModelGraph format="dot" reduced="false" include-tags="#untagged"/>
        <Logger time-step="5">
            <Input>
                <Symbol symbol-ref="m.phi"/>
                <Symbol symbol-ref="R"/>
                <Symbol symbol-ref="R_i"/>
                <Symbol symbol-ref="s"/>
                <Symbol symbol-ref="Rho"/>
                <!--    <Disabled>
        <Symbol symbol-ref="T"/>
    </Disabled>
-->
                <Symbol symbol-ref="Rho_i"/>
                <Symbol symbol-ref="Tension"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <!--    <Disabled>
        <Plots>
            <Plot time-step="1">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="0.0" maximum="3.0">
                    <Symbol symbol-ref="R"/>
                    <Symbol symbol-ref="R_i"/>
                    <Symbol symbol-ref="s"/>
                    <Symbol symbol-ref="Rho"/>
                    <Symbol symbol-ref="Rho_i"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
            <Plot time-step="1" internal:disabled="true">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="-1" maximum="1">
                    <Symbol symbol-ref="A" internal:disabled="true"/>
                    <Symbol symbol-ref="rate1"/>
                    <Symbol symbol-ref="U"/>
                    <Symbol symbol-ref="rate"/>
                    <Symbol symbol-ref="P3"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
            <Plot time-step="10">
                <Style decorate="true" line-width="2.0" style="lines"/>
                <Terminal terminal="png"/>
                <X-axis minimum="10.0">
                    <Symbol symbol-ref="time"/>
                </X-axis>
                <Y-axis>
                    <Symbol symbol-ref="Tension"/>
                </Y-axis>
            </Plot>
            <Plot time-step="10">
                <Style decorate="true" line-width="2.0" style="lines"/>
                <Terminal terminal="png"/>
                <X-axis minimum="10.0">
                    <Symbol symbol-ref="time"/>
                </X-axis>
                <Y-axis minimum="160" maximum="185">
                    <Symbol symbol-ref="Perimeter"/>
                </Y-axis>
            </Plot>
        </Plots>
    </Disabled>
-->
        </Logger>
        <Gnuplotter time-step="10" decorate="false" name="Collision detection plot">
            <Terminal name="png"/>
            <Plot title="Protrusion Field">
                <Cells value="cell.type">
                    <ColorMap>
                        <Color value="0" color="black"/>
                        <Color value="1" color="black"/>
                    </ColorMap>
                </Cells>
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color value="0.0001" color="white"/>
                        <Color value="1" color="white"/>
                        <Color value="0" color="green"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Analysis>
</MorpheusModel>
