<MorpheusModel version="4">
    <Description>
        <Title>WPI_Maze_Collision_TrackB</Title>
        <Details>Chemotaxis of polarized cell
----------------------------
Show feedback between cell motility, cell polarization and external gradient.
 
Two cell polarization models are taken from the original publication:
Y. Mori, A. Jilkine and L. Edelstein-Keshet (2008). Wave-Pinning and Cell Polarity from a Bistable Reaction-Diffusion System. Biophysical Journal 94(9), 3684-3697. DOI:10.1529/biophysj.107.120824
</Details>
    </Description>
    <Global>
        <Constant symbol="lengthscale" value="(1)*2*pi/132"/>
        <Constant symbol="ts1" name="Time to *end* first light stimulus from &quot;time = 0&quot;" value="0"/>
        <Constant symbol="ts2" name="Time to *starts* second light stimulus from &quot;time = ts2&quot;" value="10"/>
        <!--    <Disabled>
        <Constant symbol="ts3" value="1700"/>
    </Disabled>
-->
        <Constant symbol="L" name="Angular size of the light stimulus" value="pi/3"/>
        <Variable symbol="A" value="0.0"/>
        <Variable symbol="B" value="0.0"/>
        <!--    <Disabled>
        <Variable symbol="U" value="0.0"/>
    </Disabled>
-->
        <Field symbol="prot" value="0.0"/>
        <!--    <Disabled>
        <Field symbol="Light" value="0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="Light">
                <Expression>U</Expression>
            </Rule>
        </System>
    </Disabled>
-->
        <!--    <Disabled>
        <Variable symbol="percalc" value="0.0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Field symbol="percalc" value="1"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Field symbol="Grad" value="noisy(l.y / lattice.y)">
            <Diffusion rate="0.0"/>
        </Field>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="100">
            <Condition>time>=400</Condition>
            <Rule symbol-ref="Grad">
                <Expression>noisy((lattice.y-l.y) / lattice.y)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="100">
            <Condition>time>=200</Condition>
            <Rule symbol-ref="Grad">
                <Expression>noisy(0.5)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <Variable symbol="ts3" value="1000000"/>
        <Field symbol="U" value="0.0">
            <!--    <Disabled>
        <Diffusion rate="0.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <BoundaryValue type="noflux" boundary="domain" value="0.0"/>
    </Disabled>
-->
            <TIFFReader filename="TrackBMed_300x450_grayscale_16bit.tiff" scaling="1.0"/>
        </Field>
        <!--    <Disabled>
        <Event trigger="on-change" time-step="1">
            <Condition>time>80</Condition>
            <Rule symbol-ref="U">
                <Expression>noisy(0.5)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="1">
            <Condition>time>120</Condition>
            <Rule symbol-ref="U">
                <Expression>noisy((lattice.y-l.y) / lattice.y)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <Constant symbol="noise" value="0"/>
        <Function symbol="noisy">
            <Parameter symbol="v" name="value"/>
            <Expression>max(0,(v+rand_norm(0,noise)))</Expression>
        </Function>
        <Constant symbol="iteration_dummy" value="1"/>
        <Constant symbol="middle" value="3*pi/2+rand_uni(-0.3,0.3)"/>
        <Constant symbol="DH" value="0.04"/>
        <Constant symbol="DP" value="0.62"/>
    </Global>
    <Space>
        <!--    <Disabled>
        <Lattice class="square">
            <Size symbol="lattice" value="700, 700, 0"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
        </Lattice>
    </Disabled>
-->
        <SpaceSymbol symbol="l"/>
        <MembraneLattice>
            <Resolution symbol="memsize" value="500"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
        <!--    <Disabled>
        <Lattice class="square">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle diameter="0" internal:disabled="true"/>
                <Image path="GapsMaze01_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <!--    <Disabled>
        <Lattice name="GapsMaze" class="square">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle diameter="0" internal:disabled="true"/>
                <Image path="GapsMaze01_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <!--    <Disabled>
        <Lattice name="SMaze" class="square">
            <Size symbol="lattice" value="200, 200, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle diameter="0" internal:disabled="true"/>
                <Image path="S_Maze_200x200.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <!--    <Disabled>
        <Lattice name="ZigZagMaze" class="square">
            <Size symbol="lattice" value="400, 400, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle diameter="0" internal:disabled="true"/>
                <Image path="ZigZagMaze_400x400_FIXED.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <Lattice name="TrackB" class="square">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <!--    <Disabled>
        <Circle diameter="0"/>
    </Disabled>
-->
                <Image path="TrackB_300x450.tiff"/>
            </Domain>
        </Lattice>
        <!--    <Disabled>
        <Lattice name="TrackA" class="square">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle diameter="0" internal:disabled="true"/>
                <Image path="TrackA_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="4000"/>
        <SaveInterval value="0"/>
        <!--    <Disabled>
        <RandomSeed value="0"/>
    </Disabled>
-->
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <!--    <Disabled>
        <CellType name="cells1" class="biological">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="132" strength="0.8" mode="surface"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="rand_uni(0.9,1.1)">
                <Diffusion rate="1*0.1*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="1.5">
                <Diffusion rate="1*50*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="0.0">
                <Diffusion rate="1*0.0001*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.05">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="30">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <System time-scaling="5" time-step="0.05" name="WavePinning with Inhibitor" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="0.06"/>
                <Constant symbol="alpha" internal:disabled="true" value="1"/>
                <Constant symbol="deltah" internal:disabled="true" value="1"/>
                <Constant symbol="gamma" value="1"/>
                <Constant symbol="delta" value="1"/>
                <Constant symbol="K" value="1"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="Sense" internal:disabled="true" value="s-U.mean"/>
                <Intermediate symbol="F" value="1*(B*(k_0+ 0.01*(P3) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.15*H)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-scaling="0.53" time-step="0.05" name="Inhibitor" solver="Dormand-Prince [adaptive, O(5)]">
                <Constant symbol="alpha" value="1"/>
                <Constant symbol="deltah" value="1"/>
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="H" internal:disabled="true">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <System time-scaling="0.02" time-step="0.05" name="PIP3" solver="Euler [fixed, O(1)]">
                <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
                <Intermediate symbol="G" value="2*s-P3"/>
                <DiffEqn symbol-ref="P3">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="P2">
                    <Expression>-G</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate">
                    <Expression>G</Expression>
                </Rule>
            </System>
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="5"/>
            <Protrusion strength="15" field="prot" maximum="50"/>
            <MembraneProperty symbol="percalc" name="Tension" internal:disabled="true" value="1">
                <Diffusion well-mixed="true" rate="0.0"/>
            </MembraneProperty>
            <Property symbol="T" name="Tension" internal:disabled="true" value="0"/>
            <NeighborhoodReporter name="Sensing perimeter " internal:disabled="true">
                <Input scaling="length" value="percalc"/>
                <Output symbol-ref="Pt" mapping="sum"/>
            </NeighborhoodReporter>
            <Property symbol="Pt" internal:disabled="true" value="0.0"/>
            <System name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]" internal:disabled="true">
                <Rule symbol-ref="T">
                    <Expression>Pt-142</Expression>
                </Rule>
            </System>
            <Mapper name="Sensing the field" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" internal:disabled="true" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property symbol="U.mean" internal:disabled="true" value="0.0"/>
            <Mapper name="scalar signal average over whole cell" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="U.mean" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="Sense" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper internal:disabled="true">
                <Input value="s"/>
                <Output symbol-ref="Sense"/>
            </Mapper>
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.1)*(time>ts2)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
        </CellType>
    </Disabled>
-->
        <!--    <Disabled>
        <CellType name="obstacle" class="biological">
            <FreezeMotion>
                <Condition>1</Condition>
            </FreezeMotion>
        </CellType>
    </Disabled>
-->
        <!--    <Disabled>
        <CellType name="cells" class="biological">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="132" strength="0.8" mode="surface"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="0.7">
                <Diffusion rate="1*0.1*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="1.8">
                <Diffusion rate="1*50*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="0.0">
                <Diffusion rate="1*0.0001*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.05">
                <Diffusion rate="0.01*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="30">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <System time-scaling="6" time-step="0.05" name="WavePinning with Inhibitor" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="0.06"/>
                <Constant symbol="alpha" internal:disabled="true" value="1"/>
                <Constant symbol="deltah" internal:disabled="true" value="1"/>
                <Constant symbol="gamma" value="1"/>
                <Constant symbol="delta" value="1"/>
                <Constant symbol="K" value="1"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="Sense" internal:disabled="true" value="s-U.mean"/>
                <Intermediate symbol="F" value="1*(B*(k_0+ 0.010*(P3) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.0*H)*A)"/>
                <Intermediate symbol="F" internal:disabled="true" value="1*(B*(k_0+ 0*(s) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.0*H)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-scaling="0.7" time-step="0.05" name="Inhibitor" solver="Dormand-Prince [adaptive, O(5)]" internal:disabled="true">
                <Constant symbol="alpha" value="1"/>
                <Constant symbol="deltah" value="1"/>
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="H" internal:disabled="true">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <System time-scaling="0.085" time-step="0.05" name="PIP3" solver="Euler [fixed, O(1)]">
                <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
                <Intermediate symbol="G" value="s-P3"/>
                <DiffEqn symbol-ref="P3">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="P2">
                    <Expression>-G</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate">
                    <Expression>G</Expression>
                </Rule>
            </System>
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="15"/>
            <Protrusion strength="5" field="prot" maximum="50"/>
            <MembraneProperty symbol="percalc" name="Tension" internal:disabled="true" value="1">
                <Diffusion well-mixed="true" rate="0.0"/>
            </MembraneProperty>
            <Property symbol="T" name="Tension" internal:disabled="true" value="0"/>
            <NeighborhoodReporter name="Sensing perimeter " internal:disabled="true">
                <Input scaling="length" value="percalc"/>
                <Output symbol-ref="Pt" mapping="sum"/>
            </NeighborhoodReporter>
            <Property symbol="Pt" internal:disabled="true" value="0.0"/>
            <System name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]" internal:disabled="true">
                <Rule symbol-ref="T">
                    <Expression>Pt-142</Expression>
                </Rule>
            </System>
            <Mapper name="Sensing the field" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" internal:disabled="true" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property symbol="U.mean" internal:disabled="true" value="0.0"/>
            <Mapper name="scalar signal average over whole cell" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="U.mean" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="Sense" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper internal:disabled="true">
                <Input value="s"/>
                <Output symbol-ref="Sense"/>
            </Mapper>
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.1)*(time>ts2)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Polarity extraction from membrane">
                <Input value="U"/>
                <Polarity symbol-ref="p1"/>
            </Mapper>
            <PropertyVector symbol="p1" name="polarity1" value="0.0, 0.0, 0.0"/>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
        </CellType>
    </Disabled>
-->
        <CellType name="cells" class="biological">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="1.2" strength="0.8" mode="aspherity"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="0.5+rand_uni(-0.1,0.1)">
                <Diffusion rate="0.12/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="7.31-rand_uni(-0.1,0.1)-0.5">
                <Diffusion rate="1*1/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="2">
                <Diffusion rate="0.09/lengthscale^2"/>
            </MembraneProperty>
            <!--    <Disabled>
        <MembraneProperty symbol="U" name="Light stimulus around the cell's membrane" value="0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <MembraneProperty symbol="P3" value="0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="3.08-0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <System time-scaling="5" time-step="0.05" name="WavePinning with Inhibitor" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="rand_norm(0.028, 0.000765)"/>
                <Constant symbol="k_1" value="rand_norm(0.372, 0.006632)"/>
                <Constant symbol="s_1" value="rand_norm(0.059, 0.001530)"/>
                <!--    <Disabled>
        <Constant symbol="alpha" value="1"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Constant symbol="deltah" value="1"/>
    </Disabled>
-->
                <Constant symbol="gamma" value="rand_norm(1.38, 0.0214)"/>
                <Constant symbol="delta" value="rand_norm(0.721, 0.006887)"/>
                <Constant symbol="K" value="rand_norm(2.93, 0.0408)"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <!--    <Disabled>
        <Intermediate symbol="Sense" value="s-U.mean"/>
    </Disabled>
-->
                <Intermediate symbol="F" value="1*(B*(k_0+ s_1*(0.93+0.5*s) + (gamma*A^n) / (K^n + A^n) ) - (delta+k_1*H+0.000*T)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-scaling="5" time-step="0.05" name="Inhibitor" solver="Euler [fixed, O(1)]">
                <Constant symbol="alpha" value="rand_norm(0.0068, 0.000102040)"/>
                <Constant symbol="deltah" value="rand_norm(0.004, 0.00015306)"/>
                <!--    <Disabled>
        <DiffEqn symbol-ref="H">
            <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
        </DiffEqn>
    </Disabled>
-->
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <!--    <Disabled>
        <System time-scaling="0.040" time-step="0.05" name="PIP3" solver="Euler [fixed, O(1)]">
            <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
            <Intermediate symbol="G" value="((P2) * (0.41 + 0.26 * 1.7*s+0.26) - (1.59) * P3)"/>
            <DiffEqn symbol-ref="P3">
                <Expression>G</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="P2">
                <Expression>-G</Expression>
            </DiffEqn>
            <Rule symbol-ref="rate">
                <Expression>G</Expression>
            </Rule>
            <Intermediate symbol="G" internal:disabled="true" value="((P2) * (0.013463969638397178 + 0.11841376064593186 * U) - (0.010341365177178187) * P3)"/>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Annotation>Below are the different ways to chaneg how the light stimulus (U) is applied on the cell's membrane. ONLY ONE SHOULD BE TURNED ON AT A TIME

</Annotation>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;L)*(time>ts2)*(time&lt;ts3))</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2)*(time&lt;ts3)+(abs(m.phi-pi/2)&lt;L)*(time>ts3)*(time&lt;ts3+2000)+((abs(m.phi-pi)&lt;L)+(abs(m.phi-0)&lt;L)+(abs(m.phi-2*pi)&lt;L))*(time>ts3+2000))*0.05</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2))*0.05</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>(abs(m.phi-pi/2)&lt;L)*(time&lt;50)*0.05+(abs(m.phi-3*pi/2)&lt;L)*(time>50)*0.05</Expression>
            </Rule>
            <Rule symbol-ref="T" internal:disabled="true">
                <Expression>double perimeter = 0;

 for (int i = 0; i &lt; cell.nodes.size(); i++) {
       int next_index = (i + 1) % cell.nodes.size();
       perimeter += distance(cell.nodes[i], cell.nodes[next_index]);
     }</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
            </Rule>
            <Rule symbol-ref="U">
                <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
            </Rule>
            <Rule symbol-ref="T" internal:disabled="true">
                <Expression>cell.surface</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="10"/>
            <Protrusion strength="10" field="prot" maximum="500"/>
            <!--    <Disabled>
        <MembraneProperty symbol="percalc" name="Tension" value="1">
            <Diffusion well-mixed="true" rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <Property symbol="T" name="Tension" value="0"/>
            <!--    <Disabled>
        <NeighborhoodReporter name="Sensing perimeter ">
            <Input scaling="length" value="percalc"/>
            <Output symbol-ref="Pt" mapping="sum"/>
        </NeighborhoodReporter>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="Pt" value="0.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <System name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="T">
                <Expression>Pt-142</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper name="Sensing the field">
            <Input value="Grad"/>
            <Output symbol-ref="s" mapping="average"/>
        </Mapper>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="s" name="signal" value="0">
            <Diffusion rate="0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="U.mean" value="0.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper name="scalar signal average over whole cell">
            <Input value="Grad"/>
            <Output symbol-ref="U.mean" mapping="average"/>
        </Mapper>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="" value="0.0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="Sense" value="0.0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper>
            <Input value="s"/>
            <Output symbol-ref="Sense"/>
        </Mapper>
    </Disabled>
-->
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.25)*(time>ts2+10)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time+0</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Polarity extraction from membrane">
                <Input value="U"/>
                <Polarity symbol-ref="p1"/>
            </Mapper>
            <PropertyVector symbol="p1" name="polarity1" value="0.0, 0.0, 0.0"/>
            <System solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T">
                    <Expression>160-cell.surface</Expression>
                </Rule>
            </System>
            <!--    <Disabled>
        <Variable symbol="vol_target" value="1385"/>
    </Disabled>
-->
            <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="vol_target">
                <Expression>1385+5*time</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <Function symbol="vol_target">
            <Expression>1385+50*time</Expression>
        </Function>
    </Disabled>
-->
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
        </CellType>
        <!--    <Disabled>
        <CellType name="cells" class="biological">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="1.2" strength="0.8" mode="aspherity"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="0.5+rand_uni(-0.1,0.1)">
                <Diffusion rate="0.02/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="9.78-rand_uni(-0.1,0.1)-0.5">
                <Diffusion rate="1*1.7/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="2">
                <Diffusion rate="0.09/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="U" name="Light stimulus around the cell's membrane" value="0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="3.08-0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <System time-scaling="2" time-step="0.05" name="WavePinning with Inhibitor" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="rand_norm(0.035, 0.0015306122448979593)"/>
                <Constant symbol="k_1" value="0"/>
                <Constant symbol="s_1" value="rand_norm(0.12, 0.007653061224489796)"/>
                <Constant symbol="alpha" internal:disabled="true" value="1"/>
                <Constant symbol="deltah" internal:disabled="true" value="1"/>
                <Constant symbol="gamma" value="rand_norm(1.31, 0.025510204081632654)"/>
                <Constant symbol="delta" value="rand_norm(2.7, 0.02806122448979592)"/>
                <Constant symbol="K" value="rand_norm(2.75, 0.04846938775510204)"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="Sense" internal:disabled="true" value="s-U.mean"/>
                <Intermediate symbol="F" value="1*(B*(k_0+ s_1*(0.93+0.55*s) + (gamma*A^n) / (K^n + A^n) ) - (delta+k_1*H+0.000*T)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-scaling="2" time-step="0.05" name="Inhibitor" solver="Euler [fixed, O(1)]" internal:disabled="true">
                <Constant symbol="alpha" value="rand_norm(0.0068, 0.000102040)"/>
                <Constant symbol="deltah" value="rand_norm(0.004, 0.00015306)"/>
                <DiffEqn symbol-ref="H" internal:disabled="true">
                    <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <System time-scaling="0.008" time-step="0.05" name="PIP3" solver="Euler [fixed, O(1)]" internal:disabled="true">
                <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
                <Intermediate symbol="G" value="((P2) * (0.41 + 0.26 * 3.7*U+0.26) - (1.59) * P3)"/>
                <DiffEqn symbol-ref="P3">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="P2">
                    <Expression>-G</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate">
                    <Expression>G</Expression>
                </Rule>
                <Intermediate symbol="G" internal:disabled="true" value="((P2) * (0.013463969638397178 + 0.11841376064593186 * U) - (0.010341365177178187) * P3)"/>
            </System>
            <System solver="Dormand-Prince [adaptive, O(5)]">
                <Annotation>Below are the different ways to chaneg how the light stimulus (U) is applied on the cell's membrane. ONLY ONE SHOULD BE TURNED ON AT A TIME

</Annotation>
                <Rule symbol-ref="U" internal:disabled="true">
                    <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;L)*(time>ts2)*(time&lt;ts3))</Expression>
                </Rule>
                <Rule symbol-ref="U" internal:disabled="true">
                    <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2)*(time&lt;ts3)+(abs(m.phi-pi/2)&lt;L)*(time>ts3)*(time&lt;ts3+2000)+((abs(m.phi-pi)&lt;L)+(abs(m.phi-0)&lt;L)+(abs(m.phi-2*pi)&lt;L))*(time>ts3+2000))*0.05</Expression>
                </Rule>
                <Rule symbol-ref="U" internal:disabled="true">
                    <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2))*0.05</Expression>
                </Rule>
                <Rule symbol-ref="U" internal:disabled="true">
                    <Expression>(abs(m.phi-pi/2)&lt;L)*(time&lt;50)*0.05+(abs(m.phi-3*pi/2)&lt;L)*(time>50)*0.05</Expression>
                </Rule>
                <Rule symbol-ref="T" internal:disabled="true">
                    <Expression>double perimeter = 0;

 for (int i = 0; i &lt; cell.nodes.size(); i++) {
       int next_index = (i + 1) % cell.nodes.size();
       perimeter += distance(cell.nodes[i], cell.nodes[next_index]);
     }</Expression>
                </Rule>
                <Rule symbol-ref="U" internal:disabled="true">
                    <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
                </Rule>
                <Rule symbol-ref="U">
                    <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
                </Rule>
                <Rule symbol-ref="T" internal:disabled="true">
                    <Expression>cell.surface</Expression>
                </Rule>
            </System>
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="prot"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="10"/>
            <Protrusion strength="10" field="prot" maximum="500"/>
            <MembraneProperty symbol="percalc" name="Tension" internal:disabled="true" value="1">
                <Diffusion well-mixed="true" rate="0.0"/>
            </MembraneProperty>
            <Property symbol="T" name="Tension" value="0"/>
            <NeighborhoodReporter name="Sensing perimeter " internal:disabled="true">
                <Input scaling="length" value="percalc"/>
                <Output symbol-ref="Pt" mapping="sum"/>
            </NeighborhoodReporter>
            <Property symbol="Pt" internal:disabled="true" value="0.0"/>
            <System name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]" internal:disabled="true">
                <Rule symbol-ref="T">
                    <Expression>Pt-142</Expression>
                </Rule>
            </System>
            <Mapper name="Sensing the field" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" internal:disabled="true" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property symbol="U.mean" internal:disabled="true" value="0.0"/>
            <Mapper name="scalar signal average over whole cell" internal:disabled="true">
                <Input value="Grad"/>
                <Output symbol-ref="U.mean" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="Sense" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper internal:disabled="true">
                <Input value="s"/>
                <Output symbol-ref="Sense"/>
            </Mapper>
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.25)*(time>ts2+10)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time+0</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Polarity extraction from membrane">
                <Input value="U"/>
                <Polarity symbol-ref="p1"/>
            </Mapper>
            <PropertyVector symbol="p1" name="polarity1" value="0.0, 0.0, 0.0"/>
            <System solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T">
                    <Expression>160-cell.surface</Expression>
                </Rule>
            </System>
            <Variable symbol="vol_target" internal:disabled="true" value="1385"/>
            <System solver="Dormand-Prince [adaptive, O(5)]" internal:disabled="true">
                <Rule symbol-ref="vol_target">
                    <Expression>1385+5*time</Expression>
                </Rule>
            </System>
            <Function symbol="vol_target" internal:disabled="true">
                <Expression>1385+50*time</Expression>
            </Function>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
        </CellType>
    </Disabled>
-->
    </CellTypes>
    <CPM>
        <Interaction default="0.0"/>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.3"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics yield="0.05" temperature="1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <!--    <Disabled>
        <Population type="cells" size="0">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="75 40 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="obstacle" size="1">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="5, 3, 1" displacements="50, 50, 1">
                    <Sphere center="50,100,0" radius="15"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" size="0">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="0.5*lattice.x, 0.05*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" name="ZigZagMaze" size="0">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="lattice.x*0.5, 0.05*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" name="GapsMaze" size="1">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="lattice.x*0.5, 0.95*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" name="SMaze" size="1">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="lattice.x*0.1, 0.9*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <Population type="cells" name="TrackB" size="0">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="lattice.x*0.25, 0.05*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
        <!--    <Disabled>
        <Population type="cells" name="TrackA" size="0">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 0" displacements="1, 1, 0">
                    <Sphere center="lattice.x*0.05, 0.05*lattice.y, 0" radius="21"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
    </CellPopulations>
    <Analysis>
        <!--    <Disabled>
        <Gnuplotter time-step="10" decorate="false">
            <Terminal name="png"/>
            <Plot title="Active Protein &amp; Light Stimulus">
                <Cells value="A"/>
                <CellArrows orientation="p*70"/>
                <Field symbol-ref="U" max="1" min="0">
                    <ColorMap>
                        <Color color="yellow" value="0.01"/>
                        <Color color="orange" value="1"/>
                        <Color color="black" value="0.0"/>
                    </ColorMap>
                </Field>
                <Cells internal:disabled="true" value="cell.type"/>
            </Plot>
            <Plot title="Protrusion Field" internal:disabled="true">
                <Cells value="A">
                    <ColorMap>
                        <Color color="plum" value="0"/>
                        <Color color="blue" value="600"/>
                        <Color color="green" value="2300"/>
                        <Color color="yellow" value="3000"/>
                    </ColorMap>
                </Cells>
                <CellArrows internal:disabled="true" orientation="p * 60"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color color="white" value="0"/>
                        <Color color="black" value="30"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter time-step="5" decorate="false">
            <Terminal name="png"/>
            <Plot title="Protrusion Field" internal:disabled="true">
                <Cells max="3000" min="0" value="timeon">
                    <ColorMap>
                        <Color color="plum" value="0"/>
                        <Color color="blue" value="600"/>
                        <Color color="green" value="2300"/>
                        <Color color="yellow" value="3000"/>
                    </ColorMap>
                </Cells>
                <CellArrows internal:disabled="true" orientation="p * 60"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color color="white" value="0"/>
                        <Color color="black" value="30"/>
                    </ColorMap>
                </Field>
            </Plot>
            <Plot title="Protrusion Field">
                <Cells value="cell.type"/>
                <CellArrows internal:disabled="true" orientation="p * 60"/>
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color color="yellow" value="0.01"/>
                        <Color color="orange" value="3"/>
                        <Color color="black" value="0"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter time-step="50">
            <Terminal name="png"/>
            <Plot>
                <Cells value="A"/>
                <CellArrows orientation="p * 60"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color color="white" value="0"/>
                        <Color color="black" value="30"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <CellTracker time-step="1" format="ISBI 2012 (XML)"/>
        <!--    <Disabled>
        <ModelGraph include-tags="#untagged" format="dot" reduced="false"/>
    </Disabled>
-->
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="m.phi"/>
                <Symbol symbol-ref="A"/>
                <Symbol symbol-ref="B"/>
                <Symbol symbol-ref="s"/>
                <Symbol symbol-ref="H"/>
                <!--    <Disabled>
        <Symbol symbol-ref="T"/>
    </Disabled>
-->
                <Symbol symbol-ref="p.phi"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <!--    <Disabled>
        <Plots>
            <Plot time-step="1">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="0.0" maximum="3">
                    <Symbol symbol-ref="A"/>
                    <Symbol symbol-ref="B"/>
                    <Symbol symbol-ref="s"/>
                    <Symbol symbol-ref="H"/>
                    <Symbol symbol-ref="P3"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
            <Plot time-step="1" internal:disabled="true">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="-1" maximum="1">
                    <Symbol symbol-ref="A" internal:disabled="true"/>
                    <Symbol symbol-ref="rate1"/>
                    <Symbol symbol-ref="U"/>
                    <Symbol symbol-ref="rate"/>
                    <Symbol symbol-ref="P3"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
        </Plots>
    </Disabled>
-->
        </Logger>
        <ModelGraph include-tags="#untagged" format="dot" reduced="false"/>
        <Gnuplotter time-step="10" name="Collision detection plot" decorate="false">
            <Terminal name="png"/>
            <!--    <Disabled>
        <Plot title="Protrusion Field">
            <Cells max="3000" min="0" value="timeon">
                <ColorMap>
                    <Color color="plum" value="0"/>
                    <Color color="blue" value="600"/>
                    <Color color="green" value="2300"/>
                    <Color color="yellow" value="3000"/>
                </ColorMap>
            </Cells>
            <CellArrows internal:disabled="true" orientation="p * 60"/>
            <Field symbol-ref="prot">
                <ColorMap>
                    <Color color="white" value="0"/>
                    <Color color="black" value="30"/>
                </ColorMap>
            </Field>
        </Plot>
    </Disabled>
-->
            <Plot title="Protrusion Field">
                <Cells value="cell.type">
                    <ColorMap>
                        <Color color="black" value="0"/>
                        <Color color="black" value="1"/>
                    </ColorMap>
                </Cells>
                <!--    <Disabled>
        <CellArrows orientation="p * 60"/>
    </Disabled>
-->
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color color="white" value="0.0001"/>
                        <Color color="white" value="1"/>
                        <Color color="green" value="0"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.surface"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="cell.length"/>
            </Input>
            <Output>
                <TextOutput file-name="cell_position"/>
            </Output>
        </Logger>
    </Analysis>
</MorpheusModel>
