<MorpheusModel version="4">
    <Description>
        <Title>Figure6_WP_Maze_Collision</Title>
        <Details>Chemotaxis of polarized cell
----------------------------
Show feedback between cell motility, cell polarization and external gradient.
 
Two cell polarization models are taken from the original publication:
Y. Mori, A. Jilkine and L. Edelstein-Keshet (2008). Wave-Pinning and Cell Polarity from a Bistable Reaction-Diffusion System. Biophysical Journal 94(9), 3684-3697. DOI:10.1529/biophysj.107.120824
</Details>
    </Description>
    <Global>
        <Constant symbol="lengthscale" value="(1.5)*2*pi/132"/>
        <Constant symbol="ts1" name="Time to *end* first light stimulus from &quot;time = 0&quot;" value="0"/>
        <Constant symbol="ts2" name="Time to *starts* second light stimulus from &quot;time = ts2&quot;" value="10"/>
        <!--    <Disabled>
        <Constant symbol="ts3" value="1700"/>
    </Disabled>
-->
        <Constant symbol="L" name="Angular size of the light stimulus" value="pi/3"/>
        <Variable symbol="A" value="0.0"/>
        <Variable symbol="B" value="0.0"/>
        <!--    <Disabled>
        <Variable symbol="U" value="0.0"/>
    </Disabled>
-->
        <Field symbol="prot" value="0.0"/>
        <!--    <Disabled>
        <Field symbol="Light" value="0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="Light">
                <Expression>U</Expression>
            </Rule>
        </System>
    </Disabled>
-->
        <!--    <Disabled>
        <Variable symbol="percalc" value="0.0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Field symbol="percalc" value="1"/>
    </Disabled>
-->
        <!--    <Disabled>
        <Field symbol="Grad" value="noisy(l.y / lattice.y)">
            <Diffusion rate="0.0"/>
        </Field>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="100">
            <Condition>time>=400</Condition>
            <Rule symbol-ref="Grad">
                <Expression>noisy((lattice.y-l.y) / lattice.y)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="100">
            <Condition>time>=200</Condition>
            <Rule symbol-ref="Grad">
                <Expression>noisy(0.5)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <Variable symbol="ts3" value="1000000"/>
        <Field symbol="U" value="0.0">
            <!--    <Disabled>
        <Diffusion rate="200.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <BoundaryValue type="noflux" boundary="domain" value="0.0"/>
    </Disabled>
-->
            <Annotation>Old IC: noisy(1*l.y / lattice.y)</Annotation>
            <!--    <Disabled>
        <BoundaryValue type="value" boundary="y" value="5.0"/>
    </Disabled>
-->
            <TIFFReader filename="GapsSlalom_300x450_grayscale_16bit.tiff" scaling="1.0"/>
        </Field>
        <!--    <Disabled>
        <Event trigger="on-change" time-step="1">
            <Condition>time>80</Condition>
            <Rule symbol-ref="U">
                <Expression>noisy(0.5)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <!--    <Disabled>
        <Event trigger="on-change" time-step="1">
            <Condition>time>120</Condition>
            <Rule symbol-ref="U">
                <Expression>noisy((lattice.y-l.y) / lattice.y)</Expression>
            </Rule>
        </Event>
    </Disabled>
-->
        <Constant symbol="noise" value="0"/>
        <Function symbol="noisy">
            <Parameter symbol="v" name="value"/>
            <Expression>max(0,(v+rand_norm(0,noise)))</Expression>
        </Function>
        <Constant symbol="iteration_dummy" value="1"/>
        <Constant symbol="middle" value="3*pi/2+rand_uni(-0.3,0.3)"/>
        <Constant symbol="DH" value="0.04"/>
        <Constant symbol="DP" value="0.62"/>
    </Global>
    <Space>
        <!--    <Disabled>
        <Lattice class="square" name="GapsMaze">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle internal:disabled="true" diameter="0"/>
                <Image path="GapsMaze01_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <SpaceSymbol symbol="l"/>
        <MembraneLattice>
            <Resolution symbol="memsize" value="500"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
        <!--    <Disabled>
        <Lattice class="square" name="SMaze">
            <Size symbol="lattice" value="200, 200, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle internal:disabled="true" diameter="0"/>
                <Image path="S_Maze_200x200.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <!--    <Disabled>
        <Lattice class="square" name="ZigZagMaze">
            <Size symbol="lattice" value="400, 400, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle internal:disabled="true" diameter="0"/>
                <Image path="ZigZagMaze_400x400_FIXED.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <!--    <Disabled>
        <Lattice class="square" name="Slalom">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <Circle internal:disabled="true" diameter="0"/>
                <Image path="SlalomMedium_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Disabled>
-->
        <Lattice class="square" name="GapsSlalom">
            <Size symbol="lattice" value="300, 450, 0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
            <Domain boundary-type="constant">
                <!--    <Disabled>
        <Circle diameter="0"/>
    </Disabled>
-->
                <Image path="GapsSlalom_300x450.tiff"/>
            </Domain>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="6000"/>
        <SaveInterval value="0"/>
        <!--    <Disabled>
        <RandomSeed value="0"/>
    </Disabled>
-->
        <TimeSymbol symbol="time"/>
        <!--    <Disabled>
        <StopCondition>
            <Condition>time > 1000 &amp;&amp; cell.center.y &lt; 0.1 * lattice.y</Condition>
        </StopCondition>
    </Disabled>
-->
    </Time>
    <CellTypes>
        <!--    <Disabled>
        <CellType class="biological" name="cells1">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="132" strength="0.8" mode="surface"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="rand_uni(0.9,1.1)">
                <Diffusion rate="1*0.1*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="1.5">
                <Diffusion rate="1*50*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="0.0">
                <Diffusion rate="1*0.0001*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.05">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="30">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <System time-step="0.05" name="WavePinning with Inhibitor" time-scaling="5" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="0.06"/>
                <Constant symbol="alpha" internal:disabled="true" value="1"/>
                <Constant symbol="deltah" internal:disabled="true" value="1"/>
                <Constant symbol="gamma" value="1"/>
                <Constant symbol="delta" value="1"/>
                <Constant symbol="K" value="1"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="Sense" internal:disabled="true" value="s-U.mean"/>
                <Intermediate symbol="F" value="1*(B*(k_0+ 0.01*(P3) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.15*H)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-step="0.05" name="Inhibitor" time-scaling="0.53" solver="Dormand-Prince [adaptive, O(5)]">
                <Constant symbol="alpha" value="1"/>
                <Constant symbol="deltah" value="1"/>
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="H" internal:disabled="true">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <System time-step="0.05" name="PIP3" time-scaling="0.02" solver="Euler [fixed, O(1)]">
                <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
                <Intermediate symbol="G" value="2*s-P3"/>
                <DiffEqn symbol-ref="P3">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="P2">
                    <Expression>-G</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate">
                    <Expression>G</Expression>
                </Rule>
            </System>
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="5"/>
            <Protrusion maximum="50" strength="15" field="prot"/>
            <MembraneProperty symbol="percalc" internal:disabled="true" name="Tension" value="1">
                <Diffusion rate="0.0" well-mixed="true"/>
            </MembraneProperty>
            <Property symbol="T" internal:disabled="true" name="Tension" value="0"/>
            <NeighborhoodReporter internal:disabled="true" name="Sensing perimeter ">
                <Input scaling="length" value="percalc"/>
                <Output symbol-ref="Pt" mapping="sum"/>
            </NeighborhoodReporter>
            <Property symbol="Pt" internal:disabled="true" value="0.0"/>
            <System internal:disabled="true" name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T">
                    <Expression>Pt-142</Expression>
                </Rule>
            </System>
            <Mapper internal:disabled="true" name="Sensing the field">
                <Input value="Grad"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" internal:disabled="true" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property symbol="U.mean" internal:disabled="true" value="0.0"/>
            <Mapper internal:disabled="true" name="scalar signal average over whole cell">
                <Input value="Grad"/>
                <Output symbol-ref="U.mean" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="Sense" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper internal:disabled="true">
                <Input value="s"/>
                <Output symbol-ref="Sense"/>
            </Mapper>
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.1)*(time>ts2)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
        </CellType>
    </Disabled>
-->
        <!--    <Disabled>
        <CellType class="biological" name="obstacle">
            <FreezeMotion>
                <Condition>1</Condition>
            </FreezeMotion>
        </CellType>
    </Disabled>
-->
        <!--    <Disabled>
        <CellType class="biological" name="cells">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="132" strength="0.8" mode="surface"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="0.7">
                <Diffusion rate="1*0.1*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="1.8">
                <Diffusion rate="1*50*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="0.0">
                <Diffusion rate="1*0.0001*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P3" value="0.05">
                <Diffusion rate="0.01*lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="30">
                <Diffusion rate="10*0.001*5*lengthscale^2"/>
            </MembraneProperty>
            <System time-step="0.05" name="WavePinning with Inhibitor" time-scaling="6" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="0.06"/>
                <Constant symbol="alpha" internal:disabled="true" value="1"/>
                <Constant symbol="deltah" internal:disabled="true" value="1"/>
                <Constant symbol="gamma" value="1"/>
                <Constant symbol="delta" value="1"/>
                <Constant symbol="K" value="1"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <Intermediate symbol="Sense" internal:disabled="true" value="s-U.mean"/>
                <Intermediate symbol="F" value="1*(B*(k_0+ 0.010*(P3) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.0*H)*A)"/>
                <Intermediate symbol="F" internal:disabled="true" value="1*(B*(k_0+ 0*(s) + (gamma*A^n) / (K^n + A^n) ) - (delta+0.0*H)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <System time-step="0.05" internal:disabled="true" name="Inhibitor" time-scaling="0.7" solver="Dormand-Prince [adaptive, O(5)]">
                <Constant symbol="alpha" value="1"/>
                <Constant symbol="deltah" value="1"/>
                <DiffEqn symbol-ref="H">
                    <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="H" internal:disabled="true">
                    <Expression>1*(alpha*A-deltah*H)</Expression>
                </DiffEqn>
            </System>
            <System time-step="0.05" name="PIP3" time-scaling="0.085" solver="Euler [fixed, O(1)]">
                <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
                <Intermediate symbol="G" value="s-P3"/>
                <DiffEqn symbol-ref="P3">
                    <Expression>G</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="P2">
                    <Expression>-G</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate">
                    <Expression>G</Expression>
                </Rule>
            </System>
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="15"/>
            <Protrusion maximum="50" strength="5" field="prot"/>
            <MembraneProperty symbol="percalc" internal:disabled="true" name="Tension" value="1">
                <Diffusion rate="0.0" well-mixed="true"/>
            </MembraneProperty>
            <Property symbol="T" internal:disabled="true" name="Tension" value="0"/>
            <NeighborhoodReporter internal:disabled="true" name="Sensing perimeter ">
                <Input scaling="length" value="percalc"/>
                <Output symbol-ref="Pt" mapping="sum"/>
            </NeighborhoodReporter>
            <Property symbol="Pt" internal:disabled="true" value="0.0"/>
            <System internal:disabled="true" name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T">
                    <Expression>Pt-142</Expression>
                </Rule>
            </System>
            <Mapper internal:disabled="true" name="Sensing the field">
                <Input value="Grad"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="s" internal:disabled="true" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property symbol="U.mean" internal:disabled="true" value="0.0"/>
            <Mapper internal:disabled="true" name="scalar signal average over whole cell">
                <Input value="Grad"/>
                <Output symbol-ref="U.mean" mapping="average"/>
            </Mapper>
            <MembraneProperty symbol="" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="Sense" internal:disabled="true" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper internal:disabled="true">
                <Input value="s"/>
                <Output symbol-ref="Sense"/>
            </Mapper>
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.1)*(time>ts2)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Polarity extraction from membrane">
                <Input value="U"/>
                <Polarity symbol-ref="p1"/>
            </Mapper>
            <PropertyVector symbol="p1" name="polarity1" value="0.0, 0.0, 0.0"/>
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
        </CellType>
    </Disabled>
-->
        <CellType class="biological" name="cells">
            <VolumeConstraint target="1385" strength="1"/>
            <SurfaceConstraint target="1.2" strength="0.8" mode="aspherity"/>
            <MembraneProperty symbol="A" name="Active form of protein" value="0.5+rand_uni(-0.1,0.1)">
                <Diffusion rate="0.12/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="B" name="Inactive form of protein" value="7.31-rand_uni(-0.1,0.1)-0.5">
                <Diffusion rate="1*1/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="H" name="Local Rac inhibtor" value="2">
                <Diffusion rate="0.09/lengthscale^2"/>
            </MembraneProperty>
            <!--    <Disabled>
        <MembraneProperty symbol="U" name="Light stimulus around the cell's membrane" value="0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <MembraneProperty symbol="P3" value="0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <MembraneProperty symbol="P2" value="3.08-0.93">
                <Diffusion rate="DP/lengthscale^2"/>
            </MembraneProperty>
            <System time-step="0.05" name="WavePinning with Inhibitor" time-scaling="5" solver="Euler [fixed, O(1)]">
                <Constant symbol="k_0" value="rand_norm(0.028, 0.000765)"/>
                <Constant symbol="k_1" value="rand_norm(0.372, 0.006632)"/>
                <Constant symbol="s_1" value="rand_norm(0.059, 0.001530)"/>
                <!--    <Disabled>
        <Constant symbol="alpha" value="1"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Constant symbol="deltah" value="1"/>
    </Disabled>
-->
                <Constant symbol="gamma" value="rand_norm(1.38, 0.0214)"/>
                <Constant symbol="delta" value="rand_norm(0.721, 0.006887)"/>
                <Constant symbol="K" value="rand_norm(2.93, 0.0408)"/>
                <Constant symbol="n" name="Hill coefficient" value="2"/>
                <!--    <Disabled>
        <Intermediate symbol="Sense" value="s-U.mean"/>
    </Disabled>
-->
                <Intermediate symbol="F" value="1*(B*(k_0+ s_1*(0.93+0.5*s) + (gamma*A^n) / (K^n + A^n) ) - (delta+k_1*H+0.000*T)*A)"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="rate1">
                    <Expression>F</Expression>
                </Rule>
            </System>
            <!--    <Disabled>
        <System time-step="0.05" name="Inhibitor" time-scaling="5" solver="Euler [fixed, O(1)]">
            <Constant symbol="alpha" value="rand_norm(0.0068, 0.000102040)"/>
            <Constant symbol="deltah" value="rand_norm(0.004, 0.00015306)"/>
            <DiffEqn symbol-ref="H" internal:disabled="true">
                <Expression>1*(alpha*2*A^2/(1+A^2)-deltah*H)</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="H">
                <Expression>1*(alpha*A-deltah*H)</Expression>
            </DiffEqn>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <System time-step="0.05" name="PIP3" time-scaling="0.040" solver="Euler [fixed, O(1)]">
            <Intermediate symbol="G" internal:disabled="true" value="1*((5*U+1)*P2*0.00072 - 0.432*P3)"/>
            <Intermediate symbol="G" value="((P2) * (0.41 + 0.26 * 3.7*s+0.26) - (1.59) * P3)"/>
            <DiffEqn symbol-ref="P3">
                <Expression>G</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="P2">
                <Expression>-G</Expression>
            </DiffEqn>
            <Rule symbol-ref="rate">
                <Expression>G</Expression>
            </Rule>
            <Intermediate symbol="G" internal:disabled="true" value="((P2) * (0.013463969638397178 + 0.11841376064593186 * U) - (0.010341365177178187) * P3)"/>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Annotation>Below are the different ways to chaneg how the light stimulus (U) is applied on the cell's membrane. ONLY ONE SHOULD BE TURNED ON AT A TIME

</Annotation>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;L)*(time>ts2)*(time&lt;ts3))</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2)*(time&lt;ts3)+(abs(m.phi-pi/2)&lt;L)*(time>ts3)*(time&lt;ts3+2000)+((abs(m.phi-pi)&lt;L)+(abs(m.phi-0)&lt;L)+(abs(m.phi-2*pi)&lt;L))*(time>ts3+2000))*0.05</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-pi/2)&lt;L)*(time&lt;ts1)+(abs(m.phi-3*pi/2)&lt;L)*(time>ts2))*0.05</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>(abs(m.phi-pi/2)&lt;L)*(time&lt;50)*0.05+(abs(m.phi-3*pi/2)&lt;L)*(time>50)*0.05</Expression>
            </Rule>
            <Rule symbol-ref="T" internal:disabled="true">
                <Expression>double perimeter = 0;

 for (int i = 0; i &lt; cell.nodes.size(); i++) {
       int next_index = (i + 1) % cell.nodes.size();
       perimeter += distance(cell.nodes[i], cell.nodes[next_index]);
     }</Expression>
            </Rule>
            <Rule symbol-ref="U" internal:disabled="true">
                <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
            </Rule>
            <Rule symbol-ref="U">
                <Expression>((abs(m.phi-3*pi/2)&lt;L)*(time&lt;ts1))+((abs(m.phi-3*pi/2+0.4)&lt;5000)*(time>ts3))+((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))*((p.phi+pi/2)&lt;(2*pi-L))+(((abs(m.phi-(p.phi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3))+((abs(m.phi-(p.phi-2*pi+pi/2))&lt;L)*(time>ts2)*(time&lt;=ts3)))*((p.phi+pi/2)>(2*pi-L))</Expression>
            </Rule>
            <Rule symbol-ref="T" internal:disabled="true">
                <Expression>cell.surface</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <PropertyVector symbol="p" name="polarity" value="0.0, 0.0, 0.0"/>
            <Mapper name="Polarity extraction from membrane">
                <Input value="A"/>
                <Polarity symbol-ref="p"/>
            </Mapper>
            <StarConvex membrane="A" strength="10"/>
            <Protrusion maximum="500" strength="10" field="prot"/>
            <!--    <Disabled>
        <MembraneProperty symbol="percalc" name="Tension" value="1">
            <Diffusion rate="0.0" well-mixed="true"/>
        </MembraneProperty>
    </Disabled>
-->
            <Property symbol="T" name="Tension" value="0"/>
            <!--    <Disabled>
        <NeighborhoodReporter name="Sensing perimeter ">
            <Input scaling="length" value="percalc"/>
            <Output symbol-ref="Pt" mapping="sum"/>
        </NeighborhoodReporter>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="Pt" value="0.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <System name="TensionComp" solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="T">
                <Expression>Pt-142</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper name="Sensing the field">
            <Input value="Grad"/>
            <Output symbol-ref="s" mapping="average"/>
        </Mapper>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="s" name="signal" value="0">
            <Diffusion rate="0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="U.mean" value="0.0"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper name="scalar signal average over whole cell">
            <Input value="Grad"/>
            <Output symbol-ref="U.mean" mapping="average"/>
        </Mapper>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="" value="0.0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <MembraneProperty symbol="Sense" value="0.0">
            <Diffusion rate="0.0"/>
        </MembraneProperty>
    </Disabled>
-->
            <!--    <Disabled>
        <Mapper>
            <Input value="s"/>
            <Output symbol-ref="Sense"/>
        </Mapper>
    </Disabled>
-->
            <Event>
                <Condition>(abs(p.phi-pi/2)&lt;0.25)*(time>ts2+10)</Condition>
                <Rule symbol-ref="ts3">
                    <Expression>time+0</Expression>
                </Rule>
            </Event>
            <MembraneProperty symbol="rate" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <MembraneProperty symbol="rate1" value="0.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Mapper name="Polarity extraction from membrane">
                <Input value="U"/>
                <Polarity symbol-ref="p1"/>
            </Mapper>
            <PropertyVector symbol="p1" name="polarity1" value="0.0, 0.0, 0.0"/>
            <System solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="T">
                    <Expression>160-cell.surface</Expression>
                </Rule>
            </System>
            <!--    <Disabled>
        <Variable symbol="vol_target" value="1385"/>
    </Disabled>
-->
            <!--    <Disabled>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="vol_target">
                <Expression>1385+5*time</Expression>
            </Rule>
        </System>
    </Disabled>
-->
            <!--    <Disabled>
        <Function symbol="vol_target">
            <Expression>1385+50*time</Expression>
        </Function>
    </Disabled>
-->
            <MembraneProperty symbol="s" name="signal" value="0">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Mapper name="Sensing the field">
                <Input value="U"/>
                <Output symbol-ref="s" mapping="average"/>
            </Mapper>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0.0"/>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.3"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics yield="0.05" temperature="1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <!--    <Disabled>
        <Population type="cells" size="0">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="75 40 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="obstacle" size="1">
            <InitCellObjects mode="distance">
                <Arrangement displacements="50, 50, 1" repetitions="5, 3, 1">
                    <Sphere radius="15" center="50,100,0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" size="0" name="ZigZagMaze">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.5, 0.05*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" size="1" name="GapsMaze">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.5, 0.95*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" size="1" name="SMaze">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.1, 0.9*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <!--    <Disabled>
        <Population type="cells" size="0" name="Slalom">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.25, 0.05*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </Disabled>
-->
        <Population type="cells" size="0" name="GapsSlalom">
            <InitCellObjects mode="distance">
                <Arrangement displacements="1, 1, 0" repetitions="1, 1, 0">
                    <Sphere radius="21" center="lattice.x*0.05, 0.05*lattice.y, 0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </CellPopulations>
    <Analysis>
        <!--    <Disabled>
        <Gnuplotter time-step="10" decorate="false">
            <Terminal name="png"/>
            <Plot title="Active Protein &amp; Light Stimulus">
                <Cells value="A"/>
                <CellArrows orientation="p*70"/>
                <Field symbol-ref="U" max="1" min="0">
                    <ColorMap>
                        <Color value="0.01" color="yellow"/>
                        <Color value="1" color="orange"/>
                        <Color value="0" color="black"/>
                    </ColorMap>
                </Field>
                <Cells internal:disabled="true" value="cell.type"/>
            </Plot>
            <Plot internal:disabled="true" title="Protrusion Field">
                <Cells value="A">
                    <ColorMap>
                        <Color value="0" color="plum"/>
                        <Color value="600" color="blue"/>
                        <Color value="2300" color="green"/>
                        <Color value="3000" color="yellow"/>
                    </ColorMap>
                </Cells>
                <CellArrows orientation="p * 60" internal:disabled="true"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color value="0" color="white"/>
                        <Color value="30" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter time-step="5" decorate="false">
            <Terminal name="png"/>
            <Plot internal:disabled="true" title="Protrusion Field">
                <Cells max="3000" min="0" value="timeon">
                    <ColorMap>
                        <Color value="0" color="plum"/>
                        <Color value="600" color="blue"/>
                        <Color value="2300" color="green"/>
                        <Color value="3000" color="yellow"/>
                    </ColorMap>
                </Cells>
                <CellArrows orientation="p * 60" internal:disabled="true"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color value="0" color="white"/>
                        <Color value="30" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
            <Plot title="Protrusion Field">
                <Cells value="cell.type"/>
                <CellArrows orientation="p * 60" internal:disabled="true"/>
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color value="0.01" color="yellow"/>
                        <Color value="3.0" color="orange"/>
                        <Color value="0" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Gnuplotter time-step="50">
            <Terminal name="png"/>
            <Plot>
                <Cells value="A"/>
                <CellArrows orientation="p * 60"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color value="0" color="white"/>
                        <Color value="30" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <CellTracker format="ISBI 2012 (XML)" time-step="1"/>
        <!--    <Disabled>
        <ModelGraph format="dot" reduced="false" include-tags="#untagged"/>
    </Disabled>
-->
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="m.phi"/>
                <Symbol symbol-ref="A"/>
                <Symbol symbol-ref="B"/>
                <Symbol symbol-ref="s"/>
                <Symbol symbol-ref="H"/>
                <!--    <Disabled>
        <Symbol symbol-ref="T"/>
    </Disabled>
-->
                <Symbol symbol-ref="p.phi"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <!--    <Disabled>
        <Plots>
            <Plot time-step="1">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="0.0" maximum="3">
                    <Symbol symbol-ref="A"/>
                    <Symbol symbol-ref="B"/>
                    <Symbol symbol-ref="s"/>
                    <Symbol symbol-ref="H"/>
                    <Symbol symbol-ref="P3"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
            <Plot time-step="1" internal:disabled="true">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis maximum="6.283">
                    <Symbol symbol-ref="m.phi"/>
                </X-axis>
                <Y-axis minimum="-1" maximum="1">
                    <Symbol symbol-ref="A" internal:disabled="true"/>
                    <Symbol symbol-ref="rate1"/>
                    <Symbol symbol-ref="U"/>
                    <Symbol symbol-ref="rate"/>
                    <Symbol symbol-ref="P3"/>
                </Y-axis>
                <Range>
                    <Time mode="current"/>
                </Range>
            </Plot>
        </Plots>
    </Disabled>
-->
        </Logger>
        <ModelGraph format="dot" reduced="false" include-tags="#untagged"/>
        <!--    <Disabled>
        <Gnuplotter time-step="25" decorate="false">
            <Terminal name="png"/>
            <Plot internal:disabled="true" title="Protrusion Field">
                <Cells max="3000" min="0" value="timeon">
                    <ColorMap>
                        <Color value="0" color="plum"/>
                        <Color value="600" color="blue"/>
                        <Color value="2300" color="green"/>
                        <Color value="3000" color="yellow"/>
                    </ColorMap>
                </Cells>
                <CellArrows orientation="p * 60" internal:disabled="true"/>
                <Field symbol-ref="prot">
                    <ColorMap>
                        <Color value="0" color="white"/>
                        <Color value="30" color="black"/>
                    </ColorMap>
                </Field>
            </Plot>
            <Plot title="Protrusion Field">
                <Cells value="cell.type"/>
                <CellArrows orientation="p * 60" internal:disabled="true"/>
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color value="0" color="light-green"/>
                        <Color value="1" color="light-green"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <Gnuplotter time-step="10" decorate="false" name="Collision detection plot">
            <Terminal name="png"/>
            <!--    <Disabled>
        <Plot title="Protrusion Field">
            <Cells max="3000" min="0" value="timeon">
                <ColorMap>
                    <Color value="0" color="plum"/>
                    <Color value="600" color="blue"/>
                    <Color value="2300" color="green"/>
                    <Color value="3000" color="yellow"/>
                </ColorMap>
            </Cells>
            <CellArrows orientation="p * 60" internal:disabled="true"/>
            <Field symbol-ref="prot">
                <ColorMap>
                    <Color value="0" color="white"/>
                    <Color value="30" color="black"/>
                </ColorMap>
            </Field>
        </Plot>
    </Disabled>
-->
            <Plot title="Protrusion Field">
                <Cells value="cell.type">
                    <ColorMap>
                        <Color value="0" color="black"/>
                        <Color value="1" color="black"/>
                    </ColorMap>
                </Cells>
                <!--    <Disabled>
        <CellArrows orientation="p * 60"/>
    </Disabled>
-->
                <Field symbol-ref="U">
                    <ColorMap>
                        <Color value="0.0001" color="white"/>
                        <Color value="1" color="white"/>
                        <Color value="0" color="green"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.surface"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="cell.length"/>
            </Input>
            <Output>
                <TextOutput file-name="cell_position"/>
            </Output>
        </Logger>
    </Analysis>
</MorpheusModel>
